var	_METHODS = newArray("Default", "Huang", "Intermodes", "IsoData", "IJ_IsoData", "Li", "Otsu");
var _NAMES = newArray("one", "two");
var _LINE_X1 = 814;
var _LINE_Y1 = 22;
var _LINE_X2 = 298;
var _LINE_Y2 = 1244;

var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/MRI_Heights_of_Surfaces_Tools";

macro "MRI Heights of Surfaces Tools (f5) Help Action Tool - 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"{
	help();
}

macro "help [f5]" {
	help();
}

function help() {
	run('URL...', 'url='+helpURL);
}

macro "create surface image [f6]" {
	createSurfaceImage(); 
}
macro 'Create Surface Image (f6) Action Tool - C000T4b12c' {
	createSurfaceImage();
}

macro "plot heights [f7]" {
	plotHeights(); 
}

macro 'Plot heights (f7) Action Tool - C000T4b12p' {
	plotHeights();
}

function createSurfaceImage() {
	method = _METHODS[6];
	titles = getList("image.titles");
	for (i = 0; i < titles.length; i++) {
		selectImage(titles[i]);
		rename("tmp");
		getVoxelSize(width, height, depth, unit);
		setAutoThreshold(method + " dark no-reset stack");
		run("Convert to Mask", "method="+method+" background=Dark black");
		zEncodeStack();															//	run("Macro...", "code=[v=(v/255) * (z+1)] stack");
		selectImage("tmp");
		run("Z Project...", "projection=[Max Intensity]");
		selectImage("tmp");
		close();
		run("Calibrate...", "function=[Straight Line] unit="+unit+" text1=[1 10] text2=["+depth+" "+10*depth+"]");
		rename(_NAMES[i]);
	}
	
	run("Merge Channels...", "c1=["+_NAMES[0]+"] c3=["+_NAMES[1]+"] create");
	setSlice(2);
	run("Enhance Contrast", "saturated=0.35");
	setSlice(1);
	run("Enhance Contrast", "saturated=0.35");
}

function plotHeights() {
	imageID = getImageID();
	run("Line Width...", "line=20");
	makeLine(_LINE_X1, _LINE_Y1, _LINE_X2, _LINE_Y2);
	dy = _LINE_Y2-_LINE_Y1;
	dx = _LINE_X2-_LINE_X1; 
	length=sqrt(dx*dx + dy*dy);
	setSlice(1);
	selectImage(imageID);
	blue = getProfile();
	setSlice(2);
	getStatistics(area, mean, min, max, std, histogram);
	red = getProfile();
	xValues = newArray(red.length);
	for (i = 0; i < xValues.length; i++) {
		xValues[i] = width*i;
	}
	Plot.create("Height of channels", "Distance ("+unit+")", "Height ("+unit+")");
	Plot.setColor("blue");
	Plot.add("line", xValues, blue);
	Plot.setColor("red");
	Plot.add("line", xValues, red);
	upperRange = max + (max/10.0);
	Plot.setLimits(0.0,length + (0.02 * length),0.00, upperRange);
	Plot.show();
}

function zEncodeStack() {
	run("Divide...", "value=255 stack");
	for(z=1; z<=nSlices ; z++) {
		setSlice(z);
		run("Multiply...", "value="+z+" slice");
	}
	setSlice(1);
}

function fractionOfRedAboveBlue(redID, blueID) {
	
}
